---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1024
set title First_experiment
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set psychopy_screen 0
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 24
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\ismae\\OneDrive - UQAR\\Bureau\\Dossier_Ismael\\UQAR\\Maîtrise\\Recherche\\DataCollections\\OpenSesame_Exp"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#ffffff"

define loop Block_loop
	set source table
	set repeat 2
	set order random
	set description "Exécute à plusieurs reprises un autre élément"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 gaze_cue left
	setcycle 0 target_letter L
	setcycle 0 target_pos -300
	setcycle 0 dist_pos 300
	setcycle 0 correct_response l
	setcycle 1 gaze_cue right
	setcycle 1 target_letter L
	setcycle 1 target_pos -300
	setcycle 1 dist_pos 300
	setcycle 1 correct_response l
	setcycle 2 gaze_cue left
	setcycle 2 target_letter R
	setcycle 2 target_pos -300
	setcycle 2 dist_pos 300
	setcycle 2 correct_response r
	setcycle 3 gaze_cue right
	setcycle 3 target_letter R
	setcycle 3 target_pos -300
	setcycle 3 dist_pos 300
	setcycle 3 correct_response r
	setcycle 4 gaze_cue left
	setcycle 4 target_letter L
	setcycle 4 target_pos 300
	setcycle 4 dist_pos -300
	setcycle 4 correct_response l
	setcycle 5 gaze_cue right
	setcycle 5 target_letter L
	setcycle 5 target_pos 300
	setcycle 5 dist_pos -300
	setcycle 5 correct_response l
	setcycle 6 gaze_cue left
	setcycle 6 target_letter R
	setcycle 6 target_pos 300
	setcycle 6 dist_pos -300
	setcycle 6 correct_response r
	setcycle 7 gaze_cue right
	setcycle 7 target_letter R
	setcycle 7 target_pos 300
	setcycle 7 dist_pos -300
	setcycle 7 correct_response r
	run Trial_sequence

define form_text_display End_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "Fin de l’expérience"
	__form_text__
	L’expérience est terminée!
	
	Cliquer sur OK pour quitter.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define loop Experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Exécute à plusieurs reprises un autre élément"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice no
	run block_sequence

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "J'ai Compris"
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	Bienvenu dans notre expérience !!!
	
	Si vous voyez à l’ecran :
	-	Un L, appuyez sur 'L'
	-	Un R, appuyer sur 'R'
	
	Soyez le plus réactif possible :-)
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define inline_script Prepare
	set description "Exécute du code Python"
	set _run ""
	___prepare__
	# --- inline_script (prepare) ---
	import socket, __main__, os, time
	from datetime import datetime
	
	# ====== CONFIG ======
	# Brekel Record Triggering (UDP broadcast)
	BREKEL_UDP_PORT = 8880
	BROADCAST_ADDRS = ["255.255.255.255"]
	BREKEL_MACHINE  = "dummy"
	BREKEL_PID      = "000"
	
	
	RECORD_BASENAME = f"session_{datetime.now().strftime('%Y%m%d_%H%M%S')}"
	RECORD_FILENAME = RECORD_BASENAME
	
	# (Option) OpenSignals en TCP
	USE_OPENSIGNALS = True
	OSIG_HOST, OSIG_PORT = "127.0.0.1", 5555
	# =====================
	
	# --- Brekel: socket UDP broadcast ---
	sock = socket.socket(socket.AF_INET, socket.SOCK_DGRAM, socket.IPPROTO_UDP)
	sock.setsockopt(socket.SOL_SOCKET, socket.SO_BROADCAST, 1)
	sock.settimeout(1.0)
	__main__.brekel_udp_sock = sock
	__main__.brekel_udp_addrs = [(addr, BREKEL_UDP_PORT) for addr in BROADCAST_ADDRS]
	__main__.brekel_machine = BREKEL_MACHINE
	__main__.brekel_pid = BREKEL_PID
	__main__.brekel_filename = RECORD_FILENAME
	
	# (Option) OpenSignals TCP
	if USE_OPENSIGNALS:
	    osig = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
	    osig.settimeout(3.0)
	    osig.connect((OSIG_HOST, OSIG_PORT))
	    try:
	        osig.setsockopt(socket.IPPROTO_TCP, socket.TCP_NODELAY, 1)
	    except Exception:
	        pass
	    __main__.osig_sock = osig
	__end__

define inline_script Run
	set description "Exécute du code Python"
	___run__
	# --- inline_script (run) ---
	import __main__, time
	
	# ====== CONFIG ======
	BREKEL_DELAY_MS = 10_000
	BREKEL_REPEATS  = 3
	BREKEL_GAP_MS   = 50
	# ====================
	
	def brekel_broadcast(msg: str, repeats=BREKEL_REPEATS, gap_ms=BREKEL_GAP_MS):
	    data = msg.encode("utf-8")
	    for _ in range(repeats):
	        for addr in __main__.brekel_udp_addrs:
	            __main__.brekel_udp_sock.sendto(data, addr)
	        time.sleep(gap_ms/1000.0)
	
	def wait_until_epoch_ms(t0_ms):
	    while True:
	        now_ms = int(time.time() * 1000)
	        dt = t0_ms - now_ms
	        if dt <= 0:
	            break
	        time.sleep(min(dt, 50)/1000.0)
	
	try:
	    if hasattr(__main__, "osig_sock"):
	        __main__.osig_sock.sendall(b"start")
	        var.opensignals_started = 1
	except Exception:
	    var.opensignals_started = 0
	
	machine = __main__.brekel_machine
	pid     = __main__.brekel_pid
	fname   = __main__.brekel_filename
	brekel_start_msg = f"Brekel_recording_start\t{machine}\t{pid}\t{fname}"
	
	t0_ms = int(time.time()*1000) + BREKEL_DELAY_MS
	wait_until_epoch_ms(t0_ms)
	brekel_broadcast(brekel_start_msg)
	__end__
	set _prepare ""

define inline_script Stop
	set description "Exécute du code Python"
	___run__
	# --- inline_script (end_of_experiment) ---
	import __main__, time
	
	def brekel_broadcast(msg: str, repeats=3, gap_ms=50):
	    data = msg.encode("utf-8")
	    for _ in range(repeats):
	        for addr in __main__.brekel_udp_addrs:
	            __main__.brekel_udp_sock.sendto(data, addr)
	        time.sleep(gap_ms/1000.0)
	
	machine = __main__.brekel_machine
	pid     = __main__.brekel_pid
	stop_msg = f"Brekel_recording_stop\t{machine}\t{pid}"
	
	
	brekel_broadcast(stop_msg)
	
	# (Option) STOP OpenSignals
	try:
	    if hasattr(__main__, "osig_sock"):
	        __main__.osig_sock.sendall(b"stop")
	        time.sleep(0.2)
	        __main__.osig_sock.close()
	except Exception:
	    pass
	
	# Fermer le socket UDP
	try:
	    __main__.brekel_udp_sock.close()
	except Exception:
	    pass
	__end__
	set _prepare ""

define sequence Trial_sequence
	set flush_keyboard yes
	set description "Lance un certain nombre d'éléments en séquence"
	run fixation_dot True
	run neutral_gaze True
	run gaze_cue True
	run target True
	run keyboard_response True
	run incorrect_sound "correct == 0"
	run logger True

define sequence block_sequence
	set flush_keyboard yes
	set description "Lance un certain nombre d'éléments en séquence"
	run reset_feedback True
	run Block_loop True
	run Stop True
	run feedback True

define sequence experiment
	set flush_keyboard yes
	set description "Lance un certain nombre d'éléments en séquence"
	run Prepare True
	run Instructions True
	run Run True
	run new_advanced_delay True
	run Experimental_loop True
	run End_of_experiment True

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Fournit des commentaires au participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Fin du Test !<br /><br />Votre temps de réponse moyenne est de  {avg_rt} ms<br />Votre performance est de {acc} %<br /><br />Appuyer sur une touche pour continuer..." x=0 y=0 z_index=0

define sketchpad fixation_dot
	set duration 745
	set description "Affiche les stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0

define sketchpad gaze_cue
	set duration 495
	set description "Affiche les stimuli"
	draw image center=1 file="gaze_{gaze_cue}.png" scale=1 show_if=True x=0 y=0 z_index=0

define sampler incorrect_sound
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Lit un fichier audio au format .wav ou .ogg"

define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collecte les réponses du clavier"
	set allowed_responses "l;r"

define logger logger
	set description "Enregistre les données expérimentales"
	set auto_log no
	log accuracy
	log average_response_time
	log correct
	log correct_keyboard_response
	log correct_response
	log response_time
	log response_time_keyboard_response
	log target_letter
	log time_keyboard_response
	log total_correct
	log total_response_time
	log total_responses

define sketchpad neutral_gaze
	set duration 745
	set description "Affiche les stimuli"
	draw image center=1 file="gaze_neutral.png" scale=1 show_if=True x=0 y=0 z_index=0

define advanced_delay new_advanced_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 10000
	set description "A random delay sampled from either a normal or uniform distribution"

define reset_feedback reset_feedback
	set description "A very simple plug-in to reset feedback variables"

define sketchpad target
	set duration 0
	set description "Affiche les stimuli"
	draw image center=1 file="gaze_{gaze_cue}.png" scale=1 show_if=True x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=28 html=yes show_if=True text="{target_letter}" x="{target_pos}" y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=28 html=yes show_if=True text=X x="{dist_pos}" y=0 z_index=0

